CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:46
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:URL|
    URL of the file:http://localhost:8080/job/Contribute_Pipeline/102//artifact/example_image_list.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Barcode,RowNumber,Column,FieldIndex
    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):90,500
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:50
    Suppress local maxima that are closer than this minimum allowed distance:60
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ExpandOrShrinkObjects:[module_num:3|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
IdentifySecondaryObjects:[module_num:4|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:MBNL1
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MaskImage:[module_num:5|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
    Select the input image:RNA
    Name the output image:MaskedRNA
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenNuclei
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    Invert the mask?:No

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:MaskedRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:30
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:MaskedRNA
    Name the output image:CorrRNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrRNA
    Name the primary objects to be identified:RNA
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Use default parameters?:Custom
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Median absolute deviation
    # of deviations:2.0

Align:[module_num:9|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
    Select the alignment method:Mutual Information
    Crop mode:Keep size
    Select the first input image:RNA
    Name the first output image:AlignedRNA
    Select the second input image:MBNL1
    Name the second output image:AlignedMBNL1

MaskImage:[module_num:10|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
    Select the input image:AlignedMBNL1
    Name the output image:MaskedMBNL1
    Use objects or an image as a mask?:Objects
    Select object for mask:ShrunkenNuclei
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    Invert the mask?:No

CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:MaskedMBNL1
    Name the output image:IllumMBNL1
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:30
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:12|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
    Select the input image:MaskedMBNL1
    Name the output image:CorrMBLN1
    Select the illumination function:IllumMBNL1
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:CorrMBLN1
    Name the primary objects to be identified:MBNL1
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Use default parameters?:Custom
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Median absolute deviation
    # of deviations:5.0

MaskObjects:[module_num:14|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
    Select objects to be masked:MBNL1
    Name the masked objects:MaskedMBNL1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RNA
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

FilterObjects:[module_num:15|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
    Name the output objects:CoFoci
    Select the object to filter:MBNL1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_MaskedMBNL1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:MBNL1
    Name the output image:BinaryMBNL1
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:RNA
    Name the output image:BinaryRNA
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:18|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:BinaryRNA_MBNL1
    Image or measurement?:Image
    Select the first image:BinaryRNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:BinaryMBNL1
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:BinaryRNA_MBNL1
    Name the primary objects to be identified:MergedFoci
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:CoFoci
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

MeasureImageIntensity:[module_num:21|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
    Select the image to measure:CorrMBLN1
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:CoFoci
    Select the image to measure:CorrRNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:CoFoci
    Select the image to measure:CorrMBLN1
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:MBNL1
    Select the image to measure:CorrRNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:MBNL1
    Select the image to measure:CorrMBLN1
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:RNA
    Select the image to measure:CorrRNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:RNA
    Select the image to measure:CorrMBLN1
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:MergedFoci
    Select the image to measure:CorrRNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:MergedFoci

MeasureCorrelation:[module_num:22|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
    Hidden:2
    Hidden:3
    Select an image to measure:CorrMBLN1
    Select an image to measure:CorrRNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select an object to measure:Nuclei
    Select an object to measure:CoFoci
    Select an object to measure:MergedFoci

MaskImage:[module_num:23|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
    Select the input image:CorrMBLN1
    Name the output image:MaskedCorrMBNL1
    Use objects or an image as a mask?:Objects
    Select object for mask:MergedFoci
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    Invert the mask?:No

MaskImage:[module_num:24|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
    Select the input image:CorrRNA
    Name the output image:MaskedCorrRNA
    Use objects or an image as a mask?:Objects
    Select object for mask:MergedFoci
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    Invert the mask?:No

MeasureCorrelation:[module_num:25|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
    Hidden:2
    Hidden:1
    Select an image to measure:MaskedCorrMBNL1
    Select an image to measure:MaskedCorrRNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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
MeasureImageAreaOccupied:[module_num:26|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
    Hidden:5
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:MBNL1
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:CoFoci
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:RNA
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:MergedFoci
    Retain a binary image of the object regions?:No
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
MeasureObjectIntensity:[module_num:27|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
    Hidden:2
    Select an image to measure:CorrRNA
    Select an image to measure:CorrMBLN1
    Select objects to measure:CoFoci
    Select objects to measure:MergedFoci

MeasureObjectIntensity:[module_num:28|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:29|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enabled:False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
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:RNA
    Select an image to measure:MBNL1
    Select objects to measure:Cells

CalculateMath:[module_num:30|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
    Name the output measurement:Norm_CoFoci_count
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_CoFoci
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:31|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
    Name the output measurement:Norm_MBNL1_count
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_MBNL1
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:32|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
    Name the output measurement:Norm_RNA_count
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_RNA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RelateObjects:[module_num:33|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
    Select the input child objects:MergedFoci
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:34|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
    Select the input child objects:CoFoci
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:35|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
    Select the input child objects:RNA
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:36|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
    Select the input child objects:MBNL1
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
GrayToColor:[module_num:37|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enabled:False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
    Select a color scheme:RGB
    Select the image to be colored red:MBNL1
    Select the image to be colored green:RNA
    Select the image to be colored blue:DNA
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
RescaleIntensity:[module_num:38|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
    Select the input image:DNA
    Name the output image:RescaledDNA
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.05
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
RescaleIntensity:[module_num:39|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
    Select the input image:RNA
    Name the output image:RescaledRNA
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.01
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
RescaleIntensity:[module_num:40|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
    Select the input image:MBNL1
    Name the output image:RescaledMBNL1
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.02
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    Method to rescale pixels below the lower limit:Set to zero
    Custom value for pixels below lower limit:0.0
    Method to rescale pixels above the upper limit:Set to one
    Custom value for pixels above upper limit:0.0
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
OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledDNA
    Name the output image:OverlayDNA
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:42|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledRNA
    Name the output image:OverlayRNA
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:RNA
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

OverlayOutlines:[module_num:43|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledMBNL1
    Name the output image:OverlayMBNL1
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:MaskedMBNL1
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

Tile:[module_num:44|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
    Select an input image:OverlayDNA
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:3
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:OverlayRNA
    Select an additional image to tile:OverlayMBNL1

SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<RowNumber>_\\\\g<Column>_\\\\g<FieldIndex>
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines/\\\\g<Barcode>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:46|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image_\\\\g<Barcode>_\\\\g<RowNumber>_\\\\g<Column>_\\\\g<FieldIndex>.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei_\\\\g<Barcode>_\\\\g<RowNumber>_\\\\g<Column>_\\\\g<FieldIndex>.csv
    Use the object name for the file name?:No
